#pragma once
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace CHANNELS1ML_8 {
  function aspirate( device & ML_STAR, sequence & positions, variable volume, variable liquid_class, variable increment_sequence, variable liquid_following, variable channel_pattern, variable sequence_use_mode, variable cLLD_sensitivity, variable submerge_depth, variable fixed_height, variable retract_height, variable touch_off, variable trouch_off_height, variable pLLD_sensitivity, variable max_height_difference, variable aspiration_mode, variable mix_cycles, variable mix_position, variable mix_volume ) void ;
  function dispense( device & ML_STAR, sequence & positions, variable volume, variable dispense_remaining, variable increment_sequence, variable liquid_following, variable channel_pattern, variable sequence_use_mode, variable cLLD_sensitivity, variable submerge_depth, variable fixed_height, variable retract_height, variable touch_off, variable touch_off_height, variable side_touch, variable minimize_z_height, variable mix_cycles, variable mix_position, variable mix_volume ) void ;
  function tip_eject( device & ML_STAR, sequence & positions, variable default_waste, variable increment_sequence, variable channel_pattern, variable sequence_use_mode ) void ;
  function tip_pickup( device & ML_STAR, sequence & positions, variable increment_sequence, variable channel_pattern, variable sequence_use_mode ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function tip_pickup( device & ML_STAR, sequence & positions, variable increment_sequence, variable channel_pattern, variable sequence_use_mode ) void {
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  }

  function tip_eject( device & ML_STAR, sequence & positions, variable default_waste, variable increment_sequence, variable channel_pattern, variable sequence_use_mode ) void {
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }

  function aspirate( device & ML_STAR, sequence & positions, variable volume, variable liquid_class, variable increment_sequence, variable liquid_following, variable channel_pattern, variable sequence_use_mode, variable cLLD_sensitivity, variable submerge_depth, variable fixed_height, variable retract_height, variable touch_off, variable trouch_off_height, variable pLLD_sensitivity, variable max_height_difference, variable aspiration_mode, variable mix_cycles, variable mix_position, variable mix_volume ) void {
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  }

  function dispense( device & ML_STAR, sequence & positions, variable volume, variable dispense_remaining, variable increment_sequence, variable liquid_following, variable channel_pattern, variable sequence_use_mode, variable cLLD_sensitivity, variable submerge_depth, variable fixed_height, variable retract_height, variable touch_off, variable touch_off_height, variable side_touch, variable minimize_z_height, variable mix_cycles, variable mix_position, variable mix_volume ) void {
    private variable dispense_mode;
    if (dispense_remaining == 1)
    {
      dispense_mode = 9;
    }
    else
    {
      dispense_mode = 8;
    }
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  }
} // library namespace
